CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "C1-")
    Name to assign these images:DNA_DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2-")
    Name to assign these images:IRE1_mNeonGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C3-")
    Name to assign these images:PlasmaMembrane_DiI16
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA_DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:ER_masks
    Select the method to identify the secondary objects:Propagation
    Select the input image:IRE1_mNeonGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0025,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:40
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:IRE1_mNeonGreen
    Select objects to measure:ER_masks

FilterObjects:[module_num:8|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
    Select the objects to filter:ER_masks
    Name the output objects:ER_masks_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MedianIntensity_IRE1_mNeonGreen
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.006

IdentifyPrimaryObjects:[module_num:9|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notes:['']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
    Select the input image:IRE1_mNeonGreen
    Name the primary objects to be identified:IRE1_clusters
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

RelateObjects:[module_num:10|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
    Parent objects:ER_masks_filtered
    Child objects:IRE1_clusters
    Name the output object:Clusters_assigned_to_ER_masks
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
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