CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['File selection']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage)

Metadata:[module_num:2|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notes:['Pull the (minimal) image header metadata.']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"SizeT": "integer", "Plate": "text", "C": "text", "ChannelName": "text", "Z": "integer", "Well": "text", "Series": "integer", "Frame": "integer", "SizeX": "integer", "Site": "text", "SizeZ": "integer", "SizeY": "integer", "FileLocation": "text", "T": "integer", "SizeC": "integer", "ColorFormat": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Separate the images into three channels (the third one, a plasma membrane dye, is optional).']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "C1-")
    Name to assign these images:DNA_DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2-")
    Name to assign these images:IRE1_mNeonGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Find all nuclei, which will be used for separating ER masks.']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
    Select the input image:DNA_DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Find IRE1 foci using adaptive thresholding.']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
    Select the input image:IRE1_mNeonGreen
    Name the primary objects to be identified:IRE1_clusters
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:7|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notes:['Use the ER-IRE1 channel to create ER masks.']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
    Select the input objects:Nuclei
    Name the objects to be identified:ER_masks
    Select the method to identify the secondary objects:Propagation
    Select the input image:IRE1_mNeonGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0025,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:40
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:8|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notes:['Measure intensities in ER masks and in IRE1 clusters.']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
    Hidden:1
    Select an image to measure:IRE1_mNeonGreen
    Select objects to measure:ER_masks
    Select objects to measure:IRE1_clusters

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:ER_masks
    Select objects to measure:IRE1_clusters
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:10|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notes:['Remove cells with very high IRE1 expression levels from analysis using a median intensity cutoff.']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
    Select the objects to filter:ER_masks
    Name the output objects:ER_masks_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MedianIntensity_IRE1_mNeonGreen
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.006

RelateObjects:[module_num:11|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
    Parent objects:ER_masks_filtered
    Child objects:Nuclei
    Name the output object:Nuclei_by_ER_masks
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:12|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
    Parent objects:ER_masks_filtered
    Child objects:IRE1_clusters
    Name the output object:Clusters_by_ER_masks
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
TrackObjects:[module_num:13|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
    Choose a tracking method:Overlap
    Select the objects to track:Nuclei
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedNuclei
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:5
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
GrayToColor:[module_num:14|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
    Select a color scheme:RGB
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    Select the image to be colored green:IRE1_mNeonGreen
    Select the image to be colored blue:DNA_DAPI
    Name the output image:IRE1_nuclei_color_image
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:15|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:IRE1_nuclei_color_image
    Name the output image:image_mask_outlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB0106
    Select objects to display:ER_masks_filtered
    Select outline color:#FB0106
    Select objects to display:Nuclei_by_ER_masks
    Select outline color:#FB0106
    Select objects to display:Clusters_by_ER_masks

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:image_mask_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:IRE1_mNeonGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:ER_IRE1_nucleus_masks_overlaid
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Image_outputs/MaskOutlines
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:TrackedNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA_DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Nuclei_tracked
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Image_outputs/Tracked_Nuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|csv_outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Cluster_Quant_
    Overwrite existing files without warning?:No
