CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['File selection']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (or (file does contain "2hTm_") (file doesnot contain "8-24hTm_29-ZZ"))

Metadata:[module_num:2|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notes:['Pull the (minimal) image header metadata and hours of tunicamycin and doxycyline treatment']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*-(?P<hours_Tm>\d+)hTm_.*
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "hTm_")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*-(?P<dox>\d+)dox_.*
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "dox_")
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
NamesAndTypes:[module_num:3|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notes:['Separate the images into three channels (the third one, a plasma membrane dye, is optional).']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:2
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "C1-")
    Name to assign these images:DNA_DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2-")
    Name to assign these images:IRE1_mNeonGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/vbelyy/Google%20Drive/Work%20folder/Manuscripts/Belyy_Tran_IRE1_clusters/Analysis/IRE1-cluster-paper/data/raw/CellProfiler_FociQuant06/Bkgnd_corr/bkgndCorrSmooth-C1-AVG_20190723.tif   
    Name to assign this image:DAPI_bkgnd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/vbelyy/Google%20Drive/Work%20folder/Manuscripts/Belyy_Tran_IRE1_clusters/Analysis/IRE1-cluster-paper/data/raw/CellProfiler_FociQuant06/Bkgnd_corr/bkgndCorrSmooth-C2-AVG_20190723.tif   
    Name to assign this image:mNeonGreen_bkgnd
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:DNA_DAPI
    Name the output image:Corr_DAPI
    Select the illumination function:DAPI_bkgnd
    Select how the illumination function is applied:Subtract
    Select the input image:IRE1_mNeonGreen
    Name the output image:Corr_mNeonGreen
    Select the illumination function:mNeonGreen_bkgnd
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:6|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notes:['Find all nuclei, which will be used for separating ER masks.']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
    Select the input image:Corr_DAPI
    Name the primary objects to be identified:Nuclei_all
    Typical diameter of objects, in pixel units (Min,Max):40,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0001,1.0
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
IdentifySecondaryObjects:[module_num:7|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notes:['Use the ER-IRE1 channel to create ER masks.']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
    Select the input objects:Nuclei_all
    Name the objects to be identified:ER_masks_all
    Select the method to identify the secondary objects:Propagation
    Select the input image:Corr_mNeonGreen
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    Regularization factor:0.001
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.348
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0002,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:250
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:8|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notes:['Measure of the ER masks']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
    Hidden:1
    Select an image to measure:Corr_mNeonGreen
    Select objects to measure:ER_masks_all

MeasureGranularity:[module_num:9|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
    Image count:1
    Object count:1
    Select an image to measure:Corr_mNeonGreen
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:5
    Range of the granular spectrum:3
    Select objects to measure:ER_masks_all

FilterObjects:[module_num:10|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
    Select the objects to filter:ER_masks_all
    Name the output objects:ER_masks_granular
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Granularity_2_Corr_mNeonGreen
    Filter using a minimum measurement value?:Yes
    Minimum value:4
    Filter using a maximum measurement value?:No
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
DisplayDataOnImage:[module_num:11|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notes:['Plot object numbers of accepted ER masks. Useful for troubleshooting the median-based thresholding algorithm.']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
    Display object or image measurements?:Object
    Select the input objects:ER_masks_all
    Measurement to display:Granularity_2_Corr_mNeonGreen
    Select the image on which to display the measurements:Corr_mNeonGreen
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:image_ER_masks_Granularity
    Font size (points):20
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:12|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
    Select the objects to filter:ER_masks_all
    Name the output objects:ER_masks_accepted
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:Intensity_MedianIntensity_Corr_mNeonGreen
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.003
    Select additional object to relabel:Nuclei_all
    Name the relabeled objects:Nuclei_accepted

IdentifyPrimaryObjects:[module_num:13|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notes:['Find IRE1 foci using adaptive thresholding.']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
    Select the input image:Corr_mNeonGreen
    Name the primary objects to be identified:IRE1_clusters
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0016,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:1
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    Thresholding method:Otsu

MaskObjects:[module_num:14|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
    Select objects to be masked:IRE1_clusters
    Name the masked objects:Clusters_in_granular_masks
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER_masks_granular
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:15|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
    Select objects to be masked:Clusters_in_granular_masks
    Name the masked objects:Clusters_in_ER_masks_masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ER_masks_accepted
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:16|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
    Parent objects:ER_masks_accepted
    Child objects:Clusters_in_ER_masks_masked
    Name the output object:Clusters_in_ER_masks_accepted
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureObjectIntensity:[module_num:17|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notes:['Measure intensities in accepted ER masks (ones that passed the median threshold filter) and in associated IRE1 clusters.']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
    Hidden:1
    Select an image to measure:Corr_mNeonGreen
    Select objects to measure:ER_masks_accepted
    Select objects to measure:Clusters_in_ER_masks_masked

MeasureObjectSizeShape:[module_num:18|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notes:['Measure shape paraemters of accepted ER masks, their associated nuclei, and their associated IRE1 clusters.']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
    Select objects to measure:ER_masks_accepted
    Select objects to measure:Clusters_in_ER_masks_masked
    Select objects to measure:Nuclei_accepted
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:19|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notes:['Create a new blank image with outlines of accepted and rejected ER masks. Useful for troubleshooting the median-based thresholding algorithm.']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
    Display outlines on a blank image?:Yes
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    Name the output image:image_ER_masks_Accepted_vs_Rejected
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#7F007F
    Select objects to display:ER_masks_all
    Select outline color:#20FEFE
    Select objects to display:ER_masks_accepted

DisplayDataOnImage:[module_num:20|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notes:['Plot object numbers of accepted ER masks. Useful for troubleshooting the median-based thresholding algorithm.']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
    Display object or image measurements?:Object
    Select the input objects:ER_masks_accepted
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:image_ER_masks_Accepted_vs_Rejected
    Text color:#FEFE0A
    Name the output image that has the measurements displayed:image_ER_masks_Accepted_vs_Rejected_labeled
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:21|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notes:['Create a new blank image with outlines of accepted ER masks, their corresponding nuclei, and identified IRE1 clusters.']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
    Display outlines on a blank image?:Yes
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    Name the output image:image_mask_outlines
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB02FE
    Select objects to display:ER_masks_accepted
    Select outline color:#20FEFE
    Select objects to display:Nuclei_accepted
    Select outline color:#21FE06
    Select objects to display:Clusters_in_ER_masks_accepted

DisplayDataOnImage:[module_num:22|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notes:['Plot the numbers of IRE1 cluster objects on top of drawn nucleus, ER, and cluster masks.']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
    Display object or image measurements?:Object
    Select the input objects:Nuclei_all
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:image_mask_outlines
    Text color:#20FEFE
    Name the output image that has the measurements displayed:image_mask_outlines_label_int01
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:23|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notes:['Plot the numbers of IRE1 cluster objects on top of drawn nucleus, ER, and cluster masks.']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
    Display object or image measurements?:Object
    Select the input objects:ER_masks_accepted
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:image_mask_outlines_label_int01
    Text color:#FB02FE
    Name the output image that has the measurements displayed:image_mask_outlines_label_int02
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:24|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notes:['Plot the numbers of IRE1 cluster objects on top of drawn nucleus, ER, and cluster masks.']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
    Display object or image measurements?:Object
    Select the input objects:Clusters_in_ER_masks_masked
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:image_mask_outlines_label_int02
    Text color:#21FE06
    Name the output image that has the measurements displayed:image_mask_outlines_labeled
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):10
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:25|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notes:['Save images of labeled ER masks.']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
    Select the type of image to save:Image
    Select the image to save:image_mask_outlines_labeled
    Select method for constructing file names:From image filename
    Select image name for file prefix:IRE1_mNeonGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:All_accepted_masks_labeled
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Image_outputs/Nuclei_ER_clusters_accepted_labeled
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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notes:['Save images of accepted nuclear, ER, and cluster masks.']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
    Select the type of image to save:Image
    Select the image to save:image_mask_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:IRE1_mNeonGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:All_accepted_masks
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Image_outputs/Nuclei_ER_clusters_accepted
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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notes:['Save images of accepted nuclear, ER, and cluster masks, with overlaid labels.']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
    Select the type of image to save:Image
    Select the image to save:image_ER_masks_Accepted_vs_Rejected_labeled
    Select method for constructing file names:From image filename
    Select image name for file prefix:IRE1_mNeonGreen
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:ER_IRE1_nucleus_mask_labeled
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Image_outputs/Accepted_vs_Rejected_ER_Masks_labeled
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|csv_outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:FociQuant06_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:29|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder sub-folder|database_outputs
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:FociQuant06.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:FociQuant06
    Which objects should be used for locations?:Nuclei_accepted
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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